PsychoPy2experiment version="2023.2.3"
Settings
  Data file delimiter = comma
  Data filename = u'psychopy_output/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'max_iters': '10', 'pop_size': '10', 'session': '999', 'run': '999', 'shared_drive': '\\\\MRI-RT\\Users\\TD_Lab\\Desktop\\Realtime\\shared_drive'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = image_gen_mri
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent image
      flipHoriz = True
      image [set every repeat] = $image_path
      size = (0.9, 0.9)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    CodeComponent get_onset_time
      Code Type = Py
      Begin Routine:
        timer.getTime()

        onset_times[trials.thisN] = timer.getTime()
    TextComponent fixation_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine washout
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    TextComponent text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    CodeComponent set_next_image
      Code Type = Py
      Each Frame:
        if trials.thisN < (pop_size - 1):

            status_file = f"{this_gen_output_path}/status.txt"

            # If the file is accessible, terminate the routine
            status = np.loadtxt(status_file, delimiter = ',')
            try:
                if status[trials.thisN + 1]:
                    image_path = f"{this_gen_output_path}/img_{trials.thisN+1:02}.png"
                    continueRoutine = False
            except:
                pass
        else:
            continueRoutine = False
  Routine generating
    RoutineSettingsComponent generating
      saveStartStop = False
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    CodeComponent core_code
      Code Type = Py
      Before Experiment:
        #### Start of experiment

        ## Import packages
        import numpy as np
        from sklearn.decomposition import PCA
        import pickle as pk
        import os, shutil, subprocess
        import atexit, signal
        from datetime import datetime, timedelta
        import pandas as pd


        ## Classes
        class Image(visual.ImageStim):
            # Embedding property
            embedding = None


        ## Functions
        def generate_image(embedding, image_name):
            # Ensure correct size and datatype
            embedding = torch.tensor(np.reshape(embedding, (1,np.size(embedding))), dtype=torch.float16)
            embedding = embedding.to(device)
            # Generate and save image
            images = pipe(image_embeds=embedding, num_inference_steps=diffusion_steps).images
            images[0].save(image_name)

        def new_generation(fitness, embeddings, iteration):
            top_n = int(pop_size/2)

            # Get top vectors
            idx = np.argsort(fitness)[::-1]
            fitness_sorted = fitness[idx]
            embeddings_sorted = embeddings[idx, :]

            fitness_top = fitness_sorted[:top_n]
            embeddings_top = embeddings_sorted[:top_n, :]

            # Compute recombination probability weights
            median = np.median(fitness)
            fitness_relative = np.clip(fitness_top - median, 0, None)

            weights = fitness_relative / np.sum(fitness_relative)

            mean = np.sum((embeddings_top.T * weights).T, axis=0)
            next_embeddings = np.random.multivariate_normal(mean, mutation_size * cov, size=pop_size)

            return next_embeddings
      Begin Experiment:
        ## Set to fullscreen

        global participant
        participant = int(expInfo['participant'])
        global run
        run = int(expInfo['run'])
        global ses
        ses = int(expInfo['session'])
        shared_drive_path = expInfo['shared_drive']

        global output_path
        output_path = f"{shared_drive_path}/images/sub-{participant:02}/ses-{ses:02}/run-{run}"

        if not os.path.exists(output_path):
            os.makedirs(output_path)

        global max_iters
        max_iters = int(expInfo['max_iters'])
        global pop_size
        pop_size = int(expInfo['pop_size'])
        global mutation_size
        mutation_size = 0.3
        global vec_size
        vec_size = 100
        global embedding_size
        embedding_size = 1024

        all_embeddings = np.zeros((max_iters, pop_size, vec_size))
        all_onset_times = np.zeros((max_iters, pop_size))
        all_scores = np.zeros((max_iters, pop_size))

        # Load PCA and covariance matrix
        global pca
        pca = pk.load(open(f"{shared_drive_path}/models/unclip_large_pca.pkl",'rb'))
        global cov
        cov = np.eye(vec_size)

        timer = core.Clock()
      Begin Routine:
        iteration = generations.thisN
        this_gen_output_path = f"{output_path}/generation_{iteration:02}"
        if not os.path.exists(this_gen_output_path):
            os.makedirs(this_gen_output_path)

        ## Generate vectors
        if iteration == 0:
            this_trial_embeddings = np.random.multivariate_normal(np.zeros(vec_size), cov, size=pop_size)
        else:
            ## CMA algorithm
        #    fitness = []
        #    if condition == "selfreport" or not scr_attached:
        #        fitness = all_ratings[iteration - 1, :] # Skip dummy image
        #    elif condition == "control":
        #        fitness = np.random.uniform(size = pop_size)
        #    else:
        #        raise Exception("Error: Invalid condition name")
        #    fitness = np.random.uniform(size = pop_size)

            embeddings = all_embeddings[iteration - 1, :, :]

            # Create a dummy image from the mean of the previous generation
            this_trial_embeddings = new_generation(fitness, embeddings, iteration)

        # Concatenate new generation embeddings
        all_embeddings[iteration, :, :] = this_trial_embeddings

        ## Generate batch of images

        pcs = this_trial_embeddings
        embeddings = pca.inverse_transform(pcs)

        embeddings_path = f'{this_gen_output_path}/embeddings.txt'
        np.savetxt(embeddings_path, embeddings, delimiter=',')
      Each Frame:
        status_file = f"{this_gen_output_path}/status.txt"

        if os.path.isfile(status_file):
            core.wait(0.1)
            try:
                status = np.loadtxt(status_file, delimiter = ',')
                if status[0]:
                    continueRoutine = False
            except:
                pass
      End Routine:
        image_path = f"{this_gen_output_path}/img_00.png"

        onset_times = np.zeros(pop_size)
  Routine rating
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    SliderComponent slider
      borderColor = Black
      fillColor = DarkGray
      forceEndRoutine = False
      granularity = 0
      initVal = 0
      labels = ("0","","","","","5","","","","","10")
      letterHeight = 0.05
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = slider
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please rate the fear you experienced.
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        ## Get SCR amplitudes

        # Get start and end times of trial
        # See end routine of previous trial for current time
        dummy_datetime = datetime.combine(datetime.today(), current_time)
        # Get relevant times
        end_time = dummy_datetime.time()
        start_time = (dummy_datetime - timedelta(seconds=5)).time()
        peak_start_time = (dummy_datetime - timedelta(seconds=4)).time()
        peak_end_time = (dummy_datetime - timedelta(seconds=1)).time()

        trial_timing = [iteration, trial,
            start_time.isoformat(timespec='milliseconds'),
            end_time.isoformat(timespec='milliseconds')]

        trial_timings.loc[len(trial_timings.index)] = trial_timing

        ## Load EDA data
        eda_data = pd.read_csv("stream/eda_data.txt", names=["eda", "time"])
        samp_data = pd.read_csv("stream/samp_data.txt", names=["samp", "time"])
        #hr_data = pd.read_csv("hr_data.txt", names=["hr", "time"])
        #temp_data = pd.read_csv("temp_data.txt", names=["temp", "time"])

        # Convert the 'time' column to datetime format
        eda_data['time'] = pd.to_datetime(eda_data['time'], format='%H:%M:%S.%f').dt.time
        samp_data['time'] = pd.to_datetime(samp_data['time'], format='%H:%M:%S.%f').dt.time
        #hr_data['time'] = pd.to_datetime(hr_data['time'], format='%H:%M:%S.%f').dt.time
        #temp_data['time'] = pd.to_datetime(temp_data['time'], format='%H:%M:%S.%f').dt.time

        # Filter the DataFrame based on the time range
        #peak_data = eda_data[(eda_data['time'] >= peak_start_time) & (eda_data['time'] <= peak_end_time)]
        all_data = eda_data[(eda_data['time'] >= start_time) & (eda_data['time'] <= end_time)]
        peak_samp = samp_data[(samp_data['time'] >= peak_start_time) & (samp_data['time'] <= peak_end_time)]

        #hr_data = hr_data[(hr_data['time'] >= start_time) & (hr_data['time'] <= end_time)]
        #temp_data = temp_data[(temp_data['time'] >= start_time) & (temp_data['time'] <= end_time)]

        # Get average baseline SCR
        #scr_mean = all_data['eda'].mean()
        #hr_mean = hr_data['hr'].mean()
        #temp_mean = temp_data['temp'].mean()



        # Get the max SCR relative to baseline
        scr_score = 0
        if not peak_samp['samp'].empty:
            scr_score = peak_samp['samp'].sum()

        ## Resample the full data and write to array

        # Calculate the average pooling factor
        target_samples = eda_samples
        arr = all_data['eda'].values

        scr_resampled = np.zeros(target_samples)
        if arr.any() and len(arr) >= target_samples:
            factor = arr.shape[0] // target_samples

            # Reshape the array into blocks
            reshaped_arr = arr[:target_samples * factor].reshape(-1, factor)

            # Take the average value within each block
            scr_resampled = np.mean(reshaped_arr, axis=1)
        else:
            repeat = True
            trials.finished = True
      End Routine:
        if slider.getRating() is None:
            all_ratings[iteration,trial] = 0
        else:
            all_ratings[iteration,trial] = slider.getRating()


        all_scr[iteration,trial] = scr_score
        scr_data[iteration, trial, :] = scr_resampled
        #all_scr_means[iteration,trial] = scr_mean
        #all_hr_means[iteration, trial] = hr_mean
        #all_temp_means[iteration, trial] = temp_mean
    ButtonComponent button
      bold = False
      borderColor = black
      borderWidth = 3
      color = black
      fillColor = lightgrey
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = Done
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  Routine start_text
    RoutineSettingsComponent start_text
      saveStartStop = False
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    TextComponent intro
      color = black
      flip = horiz
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Waiting for trigger...
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    KeyboardComponent key_resp
      allowedKeys = 't'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent start_timer
      Code Type = Py
      End Routine:
        # Start manager subprocess
        ##manager = subprocess.Popen(['python', 'manager.py', shared_drive_path, str(participant), str(run)])#, stdout=subprocess.PIPE, stderr=subprocess.PIPE)
        ##atexit.register(os.kill, manager.pid, signal.CTRL_C_EVENT)

        timer.reset()
  Routine end_text
    RoutineSettingsComponent end_text
      saveStartStop = False
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    TextComponent outro
      color = black
      flip = horiz
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Run complete.
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  Routine clear_data
    RoutineSettingsComponent clear_data
      saveStartStop = False
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        # Reset data for new loop

        all_embeddings = np.zeros((max_iters, pop_size, vec_size))
        all_scores = np.zeros((max_iters, pop_size))

        trial_timings = pd.DataFrame(columns=['generation', 'trial', 'start_time', 'end_time'])
  Routine generate_text
    RoutineSettingsComponent generate_text
      saveStartStop = False
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Generating...
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  Routine save_data
    RoutineSettingsComponent save_data
      saveStartStop = False
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        np.savetxt(f"{this_gen_output_path}/onset_times.txt", onset_times, delimiter=',')
      Each Frame:
        fitness_path = f"{this_gen_output_path}/fitness.txt"

        if os.path.isfile(fitness_path):
            fitness = np.loadtxt(fitness_path, delimiter=',')
            try:
                if fitness[0]:
                    continueRoutine = False
            except:
                pass
        else:
            pass
      End Routine:
        all_onset_times[iteration, :] = onset_times
        all_scores[iteration,:] = fitness


        np.savetxt(f"{output_path}/all_onset_times.txt", all_onset_times, delimiter=',')
        np.savetxt(f"{output_path}/all_scores.txt", all_scores, delimiter=',')
        np.savetxt(f"{output_path}/all_embeddings.txt", all_embeddings.reshape(max_iters * pop_size, vec_size), delimiter=',')
    TextComponent fixation
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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  Routine block_start
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    TextComponent text_9
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are about to begin a block. This will take 10-20 minutes.

        Press [SPACE] when you are ready to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine check_eda
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    TextComponent check_eda_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        There is a problem with the EDA connection.

        Please alert the experimenter before continuing with the experiment.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent repeat_code
      Code Type = Py
      Begin Routine:
        if not repeat:
            repeat_loop.finished = True
            continueRoutine = False
        elif repeat:
            win.fullscr = False
            win.flip()
            failed_trials.append(f"generation {iteration}, trial {trial}")
      End Routine:
        if repeat:
            win.fullscr = True
            win.flip()
Flow
  Routine start_text
  LoopInitiator generations loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = max_iters
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    Routine generating
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = pop_size
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      Routine trial
      Routine washout
    LoopTerminator trials
    Routine save_data
  LoopTerminator generations
  Routine end_text
