PsychoPy2experiment version="2023.2.3"
Settings
  Data file delimiter = comma
  Data filename = u'psychopy_output/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '999', 'run': '999', 'condition': 'ratings'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = image_gen_mri
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent image
      flipHoriz = True
      image [set every repeat] = $image_path
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    CodeComponent get_onset_time
      Code Type = Py
      Begin Routine:
        # Get onset time
        timer.getTime()
        onset_times[trials.thisN] = timer.getTime()
  Routine generating
    RoutineSettingsComponent generating
      saveStartStop = False
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    CodeComponent generator_code
      Code Type = Py
      Begin Routine:
        # Set output path
        iteration = generations.thisN
        this_gen_output_path = f"{output_path}/generation_{iteration:02}"
        if not os.path.exists(this_gen_output_path):
            os.makedirs(this_gen_output_path)

        # Generate vectors
        if iteration == 0:
            this_trial_embeddings = np.random.multivariate_normal(np.zeros(vec_size), np.eye(vec_size), size=pop_size)
        else:
            embeddings = all_embeddings[iteration - 1, :, :]
        #    embeddings = pca.transform(np.loadtxt(f"{output_path}/generation_{iteration - 1:02}/embeddings_post.txt", delimiter=","))
            this_trial_embeddings = new_generation(fitness, embeddings, iteration)

        # Concatenate new generation embeddings
        all_embeddings[iteration, :, :] = this_trial_embeddings

        # Generate batch of image embeddings
        pcs = this_trial_embeddings
        embeddings = pca.inverse_transform(pcs)

        # Save embeddings to be read by generator
        embeddings_path = f'{this_gen_output_path}/embeddings.txt'
        np.savetxt(embeddings_path, embeddings, delimiter=',')
      Each Frame:
        # Wait for first image to be generated
        status_file = f"{this_gen_output_path}/status.txt"

        if os.path.isfile(status_file):
            core.wait(0.1)
            try:
                status = np.loadtxt(status_file, delimiter = ',')
                if status[0]:
                    continueRoutine = False
            except:
                pass
      End Routine:
        # Set image path
        image_path = f"{this_gen_output_path}/img_00.png"

        # Initialize data arrays
        onset_times = np.zeros(pop_size)
        ratings = np.zeros(pop_size)
        response_times = np.zeros(pop_size)
        scores = np.zeros(pop_size)
    PolygonComponent generating_fixation_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine rating
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    CodeComponent rating_code
      Code Type = Py
      Begin Routine:
        # Clear buffer
        keys = event.getKeys(keyList=['1', '2', '3', '4', '6'])
        # Define rating dict
        rating_dict = {"1": 0, "2": 1, "3": 2, "4": 3, "6": 4}
      Each Frame:
        # Check for keypress
        keys = event.getKeys(keyList=['1', '2', '3', '4', '6'])

        if keys:
            ratings[trials.thisN] = rating_dict[keys[0]]
            response_times[trials.thisN] = timer.getTime()
            print(f"Rating is: {rating_dict[keys[0]]}")
            continueRoutine = False
      End Routine:
        # If no keys pressed, set data values as NA
        if keys is None:
            ratings[trials.thisN] = np.NaN
            response_times[trials.thisN] = np.NaN
            print(f"Rating is: {pd.NA}")
    PolygonComponent rating_fixation_square
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine start_text
    RoutineSettingsComponent start_text
      saveStartStop = False
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    TextComponent intro
      color = black
      flip = horiz
      letterHeight = 0.04
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The experiment will begin soon.

        After each video, you will see a black square. You will have 5 seconds to make a rating on the remote according to the scale shown below.
    KeyboardComponent key_resp
      allowedKeys = '5'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent core_code
      Code Type = Py
      Before Experiment:
        #### Start of experiment

        ## Import packages
        import numpy as np
        from sklearn.decomposition import PCA
        import pickle as pk
        import json
        import os, shutil, subprocess
        import atexit, signal
        from datetime import datetime, timedelta
        import pandas as pd


        ## Classes
        class Image(visual.ImageStim):
            # Embedding property
            embedding = None

        ## Functions
        #def generate_image(embedding, image_name):
        #    '''Legacy function for generating images, now done by the collector'''
        #    # Ensure correct size and datatype
        #    embedding = torch.tensor(np.reshape(embedding, (1,np.size(embedding))), dtype=torch.float16)
        #    embedding = embedding.to(device)
        #    # Generate and save image
        #    images = pipe(image_embeds=embedding, num_inference_steps=diffusion_steps).images
        #    images[0].save(image_name)

        def new_generation(fitness, embeddings, iteration):
            '''This function takes the fitness scores and embeddings of the previous
            generation in order to produce a new set of embeddings'''
            top_n = int(pop_size/2)

            # Get top vectors
            idx = np.argsort(fitness)[::-1]
            fitness_sorted = fitness[idx]
            embeddings_sorted = embeddings[idx, :]

            fitness_top = fitness_sorted[:top_n]
            embeddings_top = embeddings_sorted[:top_n, :]

            # Compute recombination probability weights
            median = np.median(fitness)
            fitness_relative = np.clip(fitness_top - median, 0, None)

            weights = fitness_relative / np.sum(fitness_relative)

            mean = np.sum((embeddings_top.T * weights).T, axis=0)
            next_embeddings = np.random.multivariate_normal(mean, mutation_size * np.eye(vec_size), size=pop_size)

            return next_embeddings
      Begin Experiment:
        # Set global vars and process experiment parameters
        participant = int(expInfo['participant'])
        run = int(expInfo['run'])
        ses = int(expInfo['session'])
        condition = expInfo['condition']

        #screen = int(expInfo['screen'])


        with open('../config.json') as f:
            config = json.load(f)

        shared_drive_path = config["shared_drive_path"]

        output_path = f"{shared_drive_path}/images/sub-{participant:02}/ses-{ses:02}/run-{run}"

        if not os.path.exists(output_path):
            os.makedirs(output_path)
        else:
            raise Exception("Target path for this participant, run, and session already exists!\nAborting...")

        max_iters = config["max_iters"]

        global pop_size
        pop_size = config["pop_size"]
        global mutation_size
        mutation_size = config["mutation_size"]

        global vec_size
        vec_size = 100
        embedding_size = 1024

        # Create output df
        latent_column_names = [f"x{i}" for i in range(vec_size)]
        df = pd.DataFrame(columns=["participant", "session", "run", "generation", "img_num", "onset", "duration", "rating", "response_time", "brain_score", *latent_column_names])

        # Create output matrices
        all_embeddings = np.empty((max_iters, pop_size, vec_size))
        #all_onset_times = np.empty((max_iters, pop_size))
        #all_scores = np.empty((max_iters, pop_size))
        #all_ratings = np.empty((max_iters, pop_size))
        #all_response_times = np.empty((max_iters, pop_size))

        # Load PCA
        pca = pk.load(open(f"{shared_drive_path}/models/unclip_large_pca.pkl",'rb'))

        # Create timer
        timer = core.Clock()
      End Routine:
        # When scanner trigger is received, set clock to zero
        timer.reset()
    ImageComponent rating_instruction
      flipHoriz = True
      image = images/rating_instruction.png
      pos = (0, -0.15)
      size = (0.75, 0.5)
      startVal [time (s)] = 0.0
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  Routine end_text
    RoutineSettingsComponent end_text
      saveStartStop = False
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    TextComponent outro
      color = black
      flip = horiz
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Run complete.
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  Routine clear_data
    RoutineSettingsComponent clear_data
      saveStartStop = False
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        # Reset data for new loop

        all_embeddings = np.zeros((max_iters, pop_size, vec_size))
        all_scores = np.zeros((max_iters, pop_size))

        trial_timings = pd.DataFrame(columns=['generation', 'trial', 'start_time', 'end_time'])
  Routine generate_text
    RoutineSettingsComponent generate_text
      saveStartStop = False
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Generating...
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  Routine save_data
    RoutineSettingsComponent save_data
      saveStartStop = False
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    CodeComponent data_code
      Code Type = Py
      Begin Routine:
        # Save onset times so that collector can begin processing fMRI data
        np.savetxt(f"{this_gen_output_path}/onset_times.txt", onset_times, delimiter=',')
      Each Frame:
        if condition == "brain":
            # Wait for collector to produce fitness scores
            score_path = f"{this_gen_output_path}/fitness.txt"

            if os.path.isfile(score_path):
                scores = np.loadtxt(score_path, delimiter=',')
                try:
                    if scores[0]:
                        continueRoutine = False
                except:
                    pass
            else:
                pass
        elif condition == "ratings":
            # If in ratings mode, just continue
            continueRoutine = False
      End Routine:
        #all_onset_times[iteration, :] = onset_times
        #all_scores[iteration,:] = scores
        #all_ratings[iteration,:] = ratings
        #all_response_times[iteration,:] = response_times


        #np.savetxt(f"{output_path}/all_onset_times.txt", all_onset_times, delimiter=',')
        #np.savetxt(f"{output_path}/all_scores.txt", all_scores, delimiter=',')
        #np.savetxt(f"{output_path}/all_ratings.txt", all_scores, delimiter=',')
        #np.savetxt(f"{output_path}/all_embeddings.txt", all_embeddings.reshape(max_iters * pop_size, vec_size), delimiter=',')

        ## Save as dataframe
        df_info = pd.DataFrame(data = {
            "participant": np.repeat(participant, pop_size),
            "session": np.repeat(ses, pop_size),
            "run": np.repeat(run, pop_size),
            "generation": np.repeat(generations.thisN, pop_size),
            "img_num": np.arange(pop_size),
            "onset": onset_times,
            "duration": np.repeat(3, pop_size),
            "rating": ratings,
            "response_time": response_times,
            "brain_score": scores
            })

        df_latents = pd.DataFrame(data = this_trial_embeddings, columns = latent_column_names)

        df_this_trial = pd.concat([df_info, df_latents], axis=1)
        df = pd.concat([df, df_this_trial], axis=0)
        df.to_csv(f"{output_path}/all_data.csv", sep=",")


        # Set fitness values based on experiment condition
        if condition == "ratings":
            fitness = ratings
        elif condition == "brain":
            fitness = scores
    TextComponent fixation
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    PolygonComponent data_fixation_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine block_start
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    TextComponent text_9
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You are about to begin a block. This will take 10-20 minutes.

        Press [SPACE] when you are ready to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine check_eda
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    TextComponent check_eda_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        There is a problem with the EDA connection.

        Please alert the experimenter before continuing with the experiment.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent repeat_code
      Code Type = Py
      Begin Routine:
        if not repeat:
            repeat_loop.finished = True
            continueRoutine = False
        elif repeat:
            win.fullscr = False
            win.flip()
            failed_trials.append(f"generation {iteration}, trial {trial}")
      End Routine:
        if repeat:
            win.fullscr = True
            win.flip()
  Routine rating_2
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  Routine set_image
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    CodeComponent set_next_image
      Code Type = Py
      Begin Routine:
        #if timer.getTime() > 600:
        #
        #    trials.finished = True
        #    continueRoutine = False
      Each Frame:
        # Wait for next image to be generated
        if trials.thisN < (pop_size - 1):

            status_file = f"{this_gen_output_path}/status.txt"

            # If the file is accessible, terminate the routine
            status = np.loadtxt(status_file, delimiter = ',')
            try:
                if status[trials.thisN + 1]:
                    image_path = f"{this_gen_output_path}/img_{trials.thisN+1:02}.png"
                    continueRoutine = False
            except:
                pass
        else:
            continueRoutine = False
    PolygonComponent set_image_fixation_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine washout
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    PolygonComponent washout_fixation_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine start_text
  LoopInitiator generations loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = max_iters
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    Routine generating
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = pop_size
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      Routine trial
      Routine rating
      Routine washout
      Routine set_image
    LoopTerminator trials
    Routine save_data
  LoopTerminator generations
  Routine end_text
